PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1440]
  color = 1.0000, 1.0000, 1.0000
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_OFF
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = Eye tracking experiment
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
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Routines
  Routine Trial
    EyetrackerRecordComponent etRecord_3
      actionType = Start and Stop
      disabled = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      syncScreenRefresh = False
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    TextComponent Fixation_Cross
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
      text = +
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    ImageComponent left_image
      image [set every repeat] = $l_image
      pos = (-0.45, 0)
      size = (0.6, 0.85)
      startEstim = 1
      startVal [time (s)] = $face_time
      stopVal [duration (s)] = 2.5
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    ImageComponent right_image
      image [set every repeat] = $r_image
      pos = (0.45, 0)
      size = (0.6, 0.85)
      startEstim = 1
      startVal [time (s)] = $face_time
      stopVal [duration (s)] = 2.5
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    PolygonComponent Targ_highlight
      lineColor = $TargColour
      lineWidth = 6
      pos [set every repeat] = $TargX,0
      shape = rectangle
      size = (0.6, 0.85)
      startEstim = 1
      startVal [time (s)] = $stim_time
      stopVal [duration (s)] = 2
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    PolygonComponent Dist_highlight
      lineColor = $Distcolour
      lineWidth = 6
      pos [set every repeat] = $DistX,0
      shape = rectangle
      size = (0.6, 0.85)
      startEstim = 1
      startVal [time (s)] = $stim_time
      stopVal [duration (s)] = 2
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        import random

        face_times = [1,1.5,2]
        random.shuffle(face_times)
        face_time = face_times[0]

        display_times = [0.15,0.25,1]
        random.shuffle(display_times)
        stim_time = display_times[0] + face_time

        eyetracker.setRecordingState(True)

        correct_text_trial.text = ""
        correctResponse = None
        incorrectResponse = None

        frameN = 0

        x = 0
        y = 0
      Each Frame:
            if roi_targ2.isLookedIn:
                correctResponse = True
                incorrectResponse = False

        # Check if gaze is within Dist_highlight_2
            elif roi_dist2.isLookedIn:
                correctResponse = False
                incorrectResponse = True
    RegionOfInterestComponent roi_targ2
      anchor = center
      debug = False
      endRoutineOn = look at
      lookDur = 0.2
      nVertices = 4
      ori = 0
      pos [set every repeat] = $TargX,0
      save = first look
      shape = rectangle
      size = (0.6, 0.85)
      startEstim = 1
      startVal [time (s)] = $stim_time
      stopVal [duration (s)] = 2
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent roi_dist2
      anchor = center
      debug = False
      endRoutineOn = look at
      lookDur = 0.2
      nVertices = 4
      ori = 0
      pos [set every repeat] = $DistX,0
      save = first look
      shape = rectangle
      size = (0.6, 0.85)
      startEstim = 1
      startVal [time (s)] = $stim_time
      stopVal [duration (s)] = 2
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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  Routine Start_block
    TextComponent Info
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000000
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      text:
        Welcome to the experiment. During your time you will see two faces and then a box will change colour. Once this happens, look at the TARGET box. Please keep your eyes centred on the cross in the middle until the box changes colour.

        you will first complete calibration

        Please press space to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        # Determine target and distractor colors based on participant number
        participant_num = int(expInfo['participant'])
        if participant_num % 2 == 0:  # even participant number
            TargColour = 'green'
            Distcolour = 'yellow'
        else:  # odd participant number
            TargColour = 'yellow'
            Distcolour = 'green'
  Routine Block_Separater
    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100
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      text:
        Please now take a break if needed

        Press SPACE to continue
    KeyboardComponent key_resp_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ratings
    ImageComponent ratings
      image [set every repeat] = $female
      pos = (0, 0.3)
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
      units = height
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    KeyboardComponent ratingmove
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SliderComponent Attractiveness
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = ('unattractive','','Neutral','','Very attractive')
      letterHeight = 0.02
      pos = (-0.4, 0)
      size = (0.4, 0.04)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
      units = height
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    SliderComponent Symmetry
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = ('Not symmetrical','','Neutral','','Very symmetrical')
      letterHeight = 0.02
      pos = (0.4, 0)
      size = (0.4, 0.04)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
      units = height
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    SliderComponent Beauty
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = ('Not beautiful','','Neutral','','Very beautiful')
      letterHeight = 0.02
      pos = (0.4, -0.2)
      size = (0.4, 0.04)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
      units = height
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    SliderComponent Averageness
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = ('Not Average','','Neutral','','Very Average')
      letterHeight = 0.02
      pos = (-0.4, -0.2)
      size = (0.4, 0.04)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
      units = height
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    SliderComponent masculinity
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = ('Not Masculine','','Neutral','','Very Masculine')
      letterHeight = 0.02
      pos = (-0.4, -0.4)
      size = (0.4, 0.04)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
      units = height
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    SliderComponent femininty
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = ('Not Feminine','','Neutral','','Very Feminine')
      letterHeight = 0.02
      pos = (0.4, -0.4)
      size = (0.4, 0.04)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
      units = height
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    TextComponent attractiveness_text
      letterHeight = 0.03
      pos = (-0.4, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
      units = height
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      text:
        Please rate how attractive this face is
    TextComponent Symmtry_text
      letterHeight = 0.03
      pos = (0.4, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
      units = height
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      text:
        Please rate how symmetrical this face is
    TextComponent beauty_text
      letterHeight = 0.03
      pos = (0.4, -0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
      units = height
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      text:
        Please rate how beautiful this face is
    TextComponent averageness_text
      letterHeight = 0.03
      pos = (-0.4, -0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
      units = height
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      text:
        Please rate how average this face is
    TextComponent masculinity_text
      letterHeight = 0.03
      pos = (-0.4, -0.35)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
      units = height
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      text:
        Please rate how masculine this face is
    TextComponent femininity_text
      letterHeight = 0.03
      pos = (0.4, -0.35)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
      units = height
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      text:
        Please rate how feminine this face is
  Routine Rating_instructions
    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100
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      text:
        You will now be asked to rate each image using the mouse. each rating is on a continuum and a RED DOT will represent your chosen position on that continuum

        Please press SPACE to continue

        After each rating, press SPACE to move on to the next image
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_
  Routine practice
    EyetrackerRecordComponent etRecord_2
      actionType = Start and Stop
      disabled = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      syncScreenRefresh = False
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    TextComponent Fixation_Cross_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.5
      text = +
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    PolygonComponent Targ_highlight_2
      lineColor = $TargColour
      lineWidth = 6
      pos [set every repeat] = $TargX,0
      shape = rectangle
      size = (0.6, 0.85)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 2
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    PolygonComponent Dist_highlight_2
      lineColor = $Distcolour
      lineWidth = 6
      pos [set every repeat] = $DistX,0
      shape = rectangle
      size = (0.6, 0.85)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 2
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    MouseComponent mouse_2
      clickable = Green_highlight_2, Yellow_highlight_2 
      disabled = True
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        import random

        x = 0
        y = 0
      Begin Routine:
        # Initialize the correct and incorrect response
        correctResponse = None
        incorrectResponse = None
        gaze_in_roi = False

        eyetracker.setRecordingState(True)
      Each Frame:
        frameN + 1
        if frameN >= 110:
            gaze_position = eyetracker.getPosition()

            if gaze_position:
                gaze_x, gaze_y = gaze_position

                if roi_targ.contains(gaze_x, gaze_y):
                    correctResponse = True
                    incorrectResponse = False
                    continueRoutine = False
            # Check if gaze is within Dist_highlight_2
                elif roi_dist.contains(gaze_x, gaze_y):
                    correctResponse = False
                    incorrectResponse = True
                    continueRoutine = False
    RegionOfInterestComponent roi_targ
      anchor = center
      debug = False
      endRoutineOn = look at
      lookDur = 0.2
      nVertices = 4
      ori = 0
      pos [set every repeat] = $TargX,0
      save = every look
      shape = rectangle
      size = (0.6, 0.85)
      startVal [time (s)] = .8
      stopVal [duration (s)] = 2
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent roi_dist
      anchor = center
      debug = False
      endRoutineOn = look at
      lookDur = 0.2
      nVertices = 4
      ori = 0
      pos [set every repeat] = $DistX,0
      save = every look
      shape = rectangle
      size = (0.6, 0.85)
      startVal [time (s)] = .8
      stopVal [duration (s)] = 2
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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  Routine practice_instructions
    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 50
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if TargColour == 'green':
            text_3.text = 'you will now complete a practice block, your target is GREEN. Press space to continue'
        else:
            text_3.text = 'you will now complete a practice block, your target is YELLOW. Press space to continue'
  Routine Block_instructions
  Routine block1
    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 50
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    KeyboardComponent key_resp_space_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if TargColour == 'green':
            text_4.text = 'you will now complete 3 experimental blocks, your target is GREEN. Press space to continue'
        else:
            text_4.text = 'you will now complete 3 experimental blocks, your target is YELLOW. Press space to continue'
  Routine calibrate
    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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  Routine feedback
    TextComponent correct_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if correctResponse:
            correct_text.text = "Correct!"
        elif incorrectResponse:
            correct_text.text = "Incorrect"
        else:
            correct_text.text = ""
  Routine feedback_2
    TextComponent correct_text_trial
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if incorrectResponse:
            correct_text_trial.text = "Incorrect"
        else:
            correct_text_trial.text = "+"
      End Routine:
        eyetracker.setRecordingState(False)
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
Flow
  Routine Start_block
  EyetrackerCalibrationRoutine calibration
  Routine practice_instructions
  LoopInitiator practice_block loopType="TrialHandler"
    conditionsFile = blocks/FtrialsPractice.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial', 'trial_1'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_2'), ('TargX', -0.45), ('DistX', 0.45)]),
      OrderedDict([('trial', 'trial_3'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_4'), ('TargX', -0.45), ('DistX', 0.45)]),
      OrderedDict([('trial', 'trial_5'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_6'), ('TargX', -0.45), ('DistX', 0.45)]),
      OrderedDict([('trial', 'trial_7'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_8'), ('TargX', -0.45), ('DistX', 0.45)]),
      OrderedDict([('trial', 'trial_9'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_10'), ('TargX', -0.45), ('DistX', 0.45)]),
      OrderedDict([('trial', 'trial_11'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_12'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_13'), ('TargX', -0.45), ('DistX', 0.45)]),
      OrderedDict([('trial', 'trial_14'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_15'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_16'), ('TargX', -0.45), ('DistX', 0.45)]),
      OrderedDict([('trial', 'trial_17'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_18'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_19'), ('TargX', -0.45), ('DistX', 0.45)]),
      OrderedDict([('trial', 'trial_20'), ('TargX', 0.45), ('DistX', -0.45)])]
    Routine practice
    Routine feedback
  LoopTerminator practice_block
  Routine block1
  LoopInitiator Fem_vs_Masc loopType="TrialHandler"
    conditionsFile = blocks/FtrialFvM.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial', 'trial_1'), ('l_image', 'Stimuli/images/masked/fem50/003f.jpg'), ('r_image', 'Stimuli/images/masked/masc50/003f.jpg'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_2'), ('l_image', 'Stimuli/images/masked/fem50/008f.jpg'), ('r_image', 'Stimuli/images/masked/masc50/008f.jpg'), ('TargX', -0.45), ('DistX', 0.45)]),
      OrderedDict([('trial', 'trial_3'), ('l_image', 'Stimuli/images/masked/fem50/010f.jpg'), ('r_image', 'Stimuli/images/masked/masc50/010f.jpg'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_4'), ('l_image', 'Stimuli/images/masked/fem50/019f.jpg'), ('r_image', 'Stimuli/images/masked/masc50/019f.jpg'), ('TargX', -0.45), ('DistX', 0.45)]),
      OrderedDict([('trial', 'trial_5'), ('l_image', 'Stimuli/images/masked/fem50/020f.jpg'), ('r_image', 'Stimuli/images/masked/masc50/020f.jpg'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_6'), ('l_image', 'Stimuli/images/masked/fem50/022f.jpg'), ('r_image', 'Stimuli/images/masked/masc50/022f.jpg'), ('TargX', -0.45), ('DistX', 0.45)]),
      OrderedDict([('trial', 'trial_7'), ('l_image', 'Stimuli/images/masked/fem50/024f.jpg'), ('r_image', 'Stimuli/images/masked/masc50/024f.jpg'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_8'), ('l_image', 'Stimuli/images/masked/fem50/025f.jpg'), ('r_image', 'Stimuli/images/masked/masc50/025f.jpg'), ('TargX', -0.45), ('DistX', 0.45)])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
    Routine Trial
    Routine feedback_2
  LoopTerminator Fem_vs_Masc
  Routine Block_Separater
  LoopInitiator Asym_vs_sym loopType="TrialHandler"
    conditionsFile = blocks/FtrialsAvS.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial', 'trial_1'), ('l_image', 'Stimuli/images/masked/asym50/003f.jpg'), ('r_image', 'Stimuli/images/masked/sym50/003f.jpg'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_2'), ('l_image', 'Stimuli/images/masked/asym50/008f.jpg'), ('r_image', 'Stimuli/images/masked/sym50/008f.jpg'), ('TargX', -0.45), ('DistX', 0.45)]),
      OrderedDict([('trial', 'trial_3'), ('l_image', 'Stimuli/images/masked/asym50/010f.jpg'), ('r_image', 'Stimuli/images/masked/sym50/010f.jpg'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_4'), ('l_image', 'Stimuli/images/masked/asym50/019f.jpg'), ('r_image', 'Stimuli/images/masked/sym50/019f.jpg'), ('TargX', -0.45), ('DistX', 0.45)]),
      OrderedDict([('trial', 'trial_5'), ('l_image', 'Stimuli/images/masked/asym50/020f.jpg'), ('r_image', 'Stimuli/images/masked/sym50/020f.jpg'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_6'), ('l_image', 'Stimuli/images/masked/asym50/022f.jpg'), ('r_image', 'Stimuli/images/masked/sym50/022f.jpg'), ('TargX', -0.45), ('DistX', 0.45)]),
      OrderedDict([('trial', 'trial_7'), ('l_image', 'Stimuli/images/masked/asym50/024f.jpg'), ('r_image', 'Stimuli/images/masked/sym50/024f.jpg'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_8'), ('l_image', 'Stimuli/images/masked/asym50/025f.jpg'), ('r_image', 'Stimuli/images/masked/sym50/025f.jpg'), ('TargX', -0.45), ('DistX', 0.45)])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
    Routine Trial
    Routine feedback_2
  LoopTerminator Asym_vs_sym
  Routine Block_Separater
  LoopInitiator distinct_vs_avg loopType="TrialHandler"
    conditionsFile = blocks/FtrialsDvA.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial', 'trial_1'), ('l_image', 'Stimuli/images/masked/dist50/003f.jpg'), ('r_image', 'Stimuli/images/masked/avg50/003f.jpg'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_2'), ('l_image', 'Stimuli/images/masked/dist50/008f.jpg'), ('r_image', 'Stimuli/images/masked/avg50/008f.jpg'), ('TargX', -0.45), ('DistX', 0.45)]),
      OrderedDict([('trial', 'trial_3'), ('l_image', 'Stimuli/images/masked/dist50/010f.jpg'), ('r_image', 'Stimuli/images/masked/avg50/010f.jpg'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_4'), ('l_image', 'Stimuli/images/masked/dist50/019f.jpg'), ('r_image', 'Stimuli/images/masked/avg50/019f.jpg'), ('TargX', -0.45), ('DistX', 0.45)]),
      OrderedDict([('trial', 'trial_5'), ('l_image', 'Stimuli/images/masked/dist50/020f.jpg'), ('r_image', 'Stimuli/images/masked/avg50/020f.jpg'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_6'), ('l_image', 'Stimuli/images/masked/dist50/022f.jpg'), ('r_image', 'Stimuli/images/masked/avg50/022f.jpg'), ('TargX', -0.45), ('DistX', 0.45)]),
      OrderedDict([('trial', 'trial_7'), ('l_image', 'Stimuli/images/masked/dist50/024f.jpg'), ('r_image', 'Stimuli/images/masked/avg50/024f.jpg'), ('TargX', 0.45), ('DistX', -0.45)]),
      OrderedDict([('trial', 'trial_8'), ('l_image', 'Stimuli/images/masked/dist50/025f.jpg'), ('r_image', 'Stimuli/images/masked/avg50/025f.jpg'), ('TargX', -0.45), ('DistX', 0.45)])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
    Routine Trial
    Routine feedback_2
  LoopTerminator distinct_vs_avg
  Routine Rating_instructions
  LoopInitiator ratingsloop loopType="TrialHandler"
    conditionsFile = blocks/filenamesforrating.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial', 'trial_1'), ('female', 'Stimuli/images/masked/original/003f.jpg'), ('male', 'Stimuli/images/masked/original/095m.jpg')]),
      OrderedDict([('trial', 'trial_2'), ('female', 'Stimuli/images/masked/original/008f.jpg'), ('male', 'Stimuli/images/masked/original/098m.jpg')]),
      OrderedDict([('trial', 'trial_3'), ('female', 'Stimuli/images/masked/original/010f.jpg'), ('male', 'Stimuli/images/masked/original/100m.jpg')]),
      OrderedDict([('trial', 'trial_4'), ('female', 'Stimuli/images/masked/original/019f.jpg'), ('male', 'Stimuli/images/masked/original/108m.jpg')]),
      OrderedDict([('trial', 'trial_5'), ('female', 'Stimuli/images/masked/original/020f.jpg'), ('male', 'Stimuli/images/masked/original/110m.jpg')]),
      OrderedDict([('trial', 'trial_6'), ('female', 'Stimuli/images/masked/original/022f.jpg'), ('male', 'Stimuli/images/masked/original/113m.jpg')]),
      OrderedDict([('trial', 'trial_7'), ('female', 'Stimuli/images/masked/original/024f.jpg'), ('male', 'Stimuli/images/masked/original/114m.jpg')]),
      OrderedDict([('trial', 'trial_8'), ('female', 'Stimuli/images/masked/original/025f.jpg'), ('male', 'Stimuli/images/masked/original/115m.jpg')]),
      OrderedDict([('trial', 'trial_9'), ('female', 'Stimuli/images/masked/original/026f.jpg'), ('male', 'Stimuli/images/masked/original/116m.jpg')]),
      OrderedDict([('trial', 'trial_10'), ('female', 'Stimuli/images/masked/original/031f.jpg'), ('male', 'Stimuli/images/masked/original/117m.jpg')])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
    Routine Ratings
  LoopTerminator ratingsloop
